PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['blue.jpg', 'jars_6040.jpg', 'jars_50508020b.jpg', 'jars.jpg', 'seq1_1.jpg', 'seq1_6040_1.jpg', 'seq1_6040_2.jpg', 'seq1_6040_3.jpg', 'seq1_6040_4.jpg', 'seq1_6040_5.jpg', 'seq1_6040_6.jpg', 'seq1_6040_7.jpg', 'seq1_6040_8.jpg', 'seq1_6040_9.jpg', 'seq1_6040_10.jpg', 'seq1_6040_11.jpg', 'seq1_6040_12.jpg', 'seq1_6040_13.jpg', 'seq1_6040_14.jpg', 'seq1_6040_15.jpg', 'seq1_6040_16.jpg', 'seq1_6040_17.jpg', 'seq1_6040_18.jpg', 'seq1_6040_19.jpg', 'seq1_6040_20.jpg', 'seq1_6040_21.jpg', 'seq1_6040_22.jpg', 'seq1_6040_23.jpg', 'seq1_6040_24.jpg', 'seq1_6040_25.jpg', 'seq1_6040_26.jpg', 'seq1_6040_27.jpg', 'seq1_6040_28.jpg', 'seq1_6040_29.jpg', 'seq1_6040_30.jpg', 'seq1_6040_31.jpg', 'seq1_6040_32.jpg', 'seq1_6040_33.jpg', 'seq1_6040_34.jpg', 'seq1_6040_35.jpg', 'seq1_6040_36.jpg', 'seq1_6040_37.jpg', 'seq1_6040_38.jpg', 'seq1_6040_39.jpg', 'seq1_6040_40.jpg', 'seq1_8515_1.jpg', 'seq1_8515_2.jpg', 'seq1_8515_3.jpg', 'seq1_8515_4.jpg', 'seq1_8515_5.jpg', 'seq1_8515_6.jpg', 'seq1_8515_7.jpg', 'seq1_8515_8.jpg', 'seq1_8515_9.jpg', 'seq1_8515_10.jpg', 'seq1_8515_11.jpg', 'seq1_8515_12.jpg', 'seq1_8515_13.jpg', 'seq1_8515_14.jpg', 'seq1_8515_15.jpg', 'seq1_8515_16.jpg', 'seq1_8515_17.jpg', 'seq1_8515_18.jpg', 'seq1_8515_19.jpg', 'seq1_8515_20.jpg', 'seq1_8515_21.jpg', 'seq1_8515_22.jpg', 'seq1_8515_23.jpg', 'seq1_8515_24.jpg', 'seq1_8515_25.jpg', 'seq1_8515_26.jpg', 'seq1_8515_27.jpg', 'seq1_8515_28.jpg', 'seq1_8515_29.jpg', 'seq1_8515_30.jpg', 'seq1_8515_31.jpg', 'seq1_8515_32.jpg', 'seq1_8515_33.jpg', 'seq1_8515_34.jpg', 'seq1_8515_35.jpg', 'seq1_8515_36.jpg', 'seq1_8515_37.jpg', 'seq1_8515_38.jpg', 'seq1_8515_39.jpg', 'seq1_8515_40.jpg', 'seq2_6040_2.jpg', 'seq2_6040_3.jpg', 'seq2_6040_4.jpg', 'seq2_6040_5.jpg', 'seq2_6040_6.jpg', 'seq2_6040_7.jpg', 'seq2_6040_8.jpg', 'seq2_6040_9.jpg', 'seq2_6040_10.jpg', 'seq2_6040_11.jpg', 'seq2_6040_12.jpg', 'seq2_6040_13.jpg', 'seq2_6040_14.jpg', 'seq2_6040_15.jpg', 'seq2_6040_16.jpg', 'seq2_6040_17.jpg', 'seq2_6040_18.jpg', 'seq2_6040_19.jpg', 'seq2_6040_20.jpg', 'seq2_8515_1.jpg', 'seq2_8515_2.jpg', 'seq2_8515_3.jpg', 'seq2_8515_4.jpg', 'seq2_8515_5.jpg', 'seq2_8515_6.jpg', 'seq2_8515_7.jpg', 'seq2_8515_8.jpg', 'seq2_8515_9.jpg', 'seq2_8515_10.jpg', 'seq2_8515_11.jpg', 'seq2_8515_12.jpg', 'seq2_8515_13.jpg', 'seq2_8515_14.jpg', 'seq2_8515_15.jpg', 'seq2_8515_16.jpg', 'seq2_8515_17.jpg', 'seq2_8515_18.jpg', 'seq2_8515_19.jpg', 'seq2_8515_20.jpg', 'seq3_6040_1.jpg', 'seq3_6040_2.jpg', 'seq3_6040_3.jpg', 'seq3_6040_4.jpg', 'seq3_6040_5.jpg', 'seq3_6040_6.jpg', 'seq3_6040_7.jpg', 'seq3_6040_8.jpg', 'seq3_6040_9.jpg', 'seq3_6040_10.jpg', 'seq3_6040_11.jpg', 'seq3_6040_12.jpg', 'seq3_6040_13.jpg', 'seq3_6040_14.jpg', 'seq3_6040_15.jpg', 'seq3_6040_16.jpg', 'seq3_6040_17.jpg', 'seq3_6040_18.jpg', 'seq3_6040_19.jpg', 'seq3_6040_20.jpg', 'seq3_6040_21.jpg', 'seq3_6040_22.jpg', 'seq3_6040_23.jpg', 'seq3_6040_24.jpg', 'seq3_6040_25.jpg', 'seq3_6040_26.jpg', 'seq3_6040_27.jpg', 'seq3_6040_28.jpg', 'seq3_6040_29.jpg', 'seq3_6040_30.jpg', 'seq3_6040_31.jpg', 'seq3_6040_32.jpg', 'seq3_6040_33.jpg', 'seq3_6040_34.jpg', 'seq3_6040_35.jpg', 'seq3_6040_36.jpg', 'seq3_6040_37.jpg', 'seq3_6040_38.jpg', 'seq3_6040_39.jpg', 'seq3_6040_40.jpg', 'seq3_8515_1.jpg', 'seq3_8515_2.jpg', 'seq3_8515_3.jpg', 'seq3_8515_4.jpg', 'seq3_8515_5.jpg', 'seq3_8515_6.jpg', 'seq3_8515_7.jpg', 'seq3_8515_8.jpg', 'seq3_8515_9.jpg', 'seq3_8515_10.jpg', 'seq3_8515_11.jpg', 'seq3_8515_12.jpg', 'seq3_8515_13.jpg', 'seq3_8515_14.jpg', 'seq3_8515_15.jpg', 'seq3_8515_16.jpg', 'seq3_8515_17.jpg', 'seq3_8515_18.jpg', 'seq3_8515_19.jpg', 'seq3_8515_20.jpg', 'seq3_8515_21.jpg', 'seq3_8515_22.jpg', 'seq3_8515_23.jpg', 'seq3_8515_24.jpg', 'seq3_8515_25.jpg', 'seq3_8515_26.jpg', 'seq3_8515_27.jpg', 'seq3_8515_28.jpg', 'seq3_8515_29.jpg', 'seq3_8515_30.jpg', 'seq3_8515_31.jpg', 'seq3_8515_32.jpg', 'seq3_8515_33.jpg', 'seq3_8515_34.jpg', 'seq3_8515_35.jpg', 'seq3_8515_36.jpg', 'seq3_8515_37.jpg', 'seq3_8515_38.jpg', 'seq3_8515_39.jpg', 'seq3_8515_40.jpg', 'seq4_6040_2.jpg', 'seq4_6040_3.jpg', 'seq4_6040_4.jpg', 'seq4_6040_5.jpg', 'seq4_6040_6.jpg', 'seq4_6040_7.jpg', 'seq4_6040_8.jpg', 'seq4_6040_9.jpg', 'seq4_6040_10.jpg', 'seq4_6040_11.jpg', 'seq4_6040_12.jpg', 'seq4_6040_13.jpg', 'seq4_6040_14.jpg', 'seq4_6040_15.jpg', 'seq4_6040_16.jpg', 'seq4_6040_17.jpg', 'seq4_6040_18.jpg', 'seq4_6040_19.jpg', 'seq4_6040_20.jpg', 'seq4_8515_1.jpg', 'seq4_8515_2.jpg', 'seq4_8515_3.jpg', 'seq4_8515_4.jpg', 'seq4_8515_5.jpg', 'seq4_8515_6.jpg', 'seq4_8515_7.jpg', 'seq4_8515_8.jpg', 'seq4_8515_9.jpg', 'seq4_8515_10.jpg', 'seq4_8515_11.jpg', 'seq4_8515_12.jpg', 'seq4_8515_13.jpg', 'seq4_8515_14.jpg', 'seq4_8515_15.jpg', 'seq4_8515_16.jpg', 'seq4_8515_17.jpg', 'seq4_8515_18.jpg', 'seq4_8515_19.jpg', 'seq4_8515_20.jpg', 'seq4_8515_21.jpg', 'seq4_8515_22.jpg', 'seq4_8515_23.jpg', 'seq4_8515_24.jpg', 'seq4_8515_25.jpg', 'seq4_8515_26.jpg', 'seq4_8515_27.jpg', 'seq4_8515_28.jpg', 'seq4_8515_29.jpg', 'seq4_8515_30.jpg', 'seq4_8515_31.jpg', 'seq4_8515_32.jpg', 'seq4_8515_33.jpg', 'seq4_8515_34.jpg', 'seq4_8515_35.jpg', 'seq4_8515_36.jpg', 'seq4_8515_37.jpg', 'seq4_8515_38.jpg', 'seq4_8515_39.jpg', 'seq4_8515_40.jpg', 'html/resources/jars_6040.jpg', 'html/resources/jars_50508020b.jpg', 'html/resources/jars.jpg', 'html/resources/seq1_6040_1.jpg', 'html/resources/seq1_6040_2.jpg', 'html/resources/seq1_6040_3.jpg', 'html/resources/seq1_6040_4.jpg', 'html/resources/seq1_6040_5.jpg', 'html/resources/seq1_6040_6.jpg', 'html/resources/seq1_6040_7.jpg', 'html/resources/seq1_6040_8.jpg', 'html/resources/seq1_6040_9.jpg', 'html/resources/seq1_6040_10.jpg', 'html/resources/seq1_6040_11.jpg', 'html/resources/seq1_6040_12.jpg', 'html/resources/seq1_6040_13.jpg', 'html/resources/seq1_6040_14.jpg', 'html/resources/seq1_6040_15.jpg', 'html/resources/seq1_6040_16.jpg', 'html/resources/seq1_6040_17.jpg', 'html/resources/seq1_6040_18.jpg', 'html/resources/seq1_6040_19.jpg', 'html/resources/seq1_6040_20.jpg', 'html/resources/seq1_6040_21.jpg', 'html/resources/seq1_6040_22.jpg', 'html/resources/seq1_6040_23.jpg', 'html/resources/seq1_6040_24.jpg', 'html/resources/seq1_6040_25.jpg', 'html/resources/seq1_6040_26.jpg', 'html/resources/seq1_6040_27.jpg', 'html/resources/seq1_6040_28.jpg', 'html/resources/seq1_6040_29.jpg', 'html/resources/seq1_6040_30.jpg', 'html/resources/seq1_6040_31.jpg', 'html/resources/seq1_6040_32.jpg', 'html/resources/seq1_6040_33.jpg', 'html/resources/seq1_6040_34.jpg', 'html/resources/seq1_6040_35.jpg', 'html/resources/seq1_6040_36.jpg', 'html/resources/seq1_6040_37.jpg', 'html/resources/seq1_6040_38.jpg', 'html/resources/seq1_6040_39.jpg', 'html/resources/seq1_6040_40.jpg', 'html/resources/seq1_8515_1.jpg', 'html/resources/seq1_8515_2.jpg', 'html/resources/seq1_8515_3.jpg', 'html/resources/seq1_8515_4.jpg', 'html/resources/seq1_8515_5.jpg', 'html/resources/seq1_8515_6.jpg', 'html/resources/seq1_8515_7.jpg', 'html/resources/seq1_8515_8.jpg', 'html/resources/seq1_8515_9.jpg', 'html/resources/seq1_8515_10.jpg', 'html/resources/seq1_8515_11.jpg', 'html/resources/seq1_8515_12.jpg', 'html/resources/seq1_8515_13.jpg', 'html/resources/seq1_8515_14.jpg', 'html/resources/seq1_8515_15.jpg', 'html/resources/seq1_8515_16.jpg', 'html/resources/seq1_8515_17.jpg', 'html/resources/seq1_8515_18.jpg', 'html/resources/seq1_8515_19.jpg', 'html/resources/seq1_8515_20.jpg', 'html/resources/seq1_8515_21.jpg', 'html/resources/seq1_8515_22.jpg', 'html/resources/seq1_8515_23.jpg', 'html/resources/seq1_8515_24.jpg', 'html/resources/seq1_8515_25.jpg', 'html/resources/seq1_8515_26.jpg', 'html/resources/seq1_8515_27.jpg', 'html/resources/seq1_8515_28.jpg', 'html/resources/seq1_8515_29.jpg', 'html/resources/seq1_8515_30.jpg', 'html/resources/seq1_8515_31.jpg', 'html/resources/seq1_8515_32.jpg', 'html/resources/seq1_8515_33.jpg', 'html/resources/seq1_8515_34.jpg', 'html/resources/seq1_8515_35.jpg', 'html/resources/seq1_8515_36.jpg', 'html/resources/seq1_8515_37.jpg', 'html/resources/seq1_8515_38.jpg', 'html/resources/seq1_8515_39.jpg', 'html/resources/seq1_8515_40.jpg', 'html/resources/seq3_6040_1.jpg', 'html/resources/seq3_6040_2.jpg', 'html/resources/seq3_6040_3.jpg', 'html/resources/seq3_6040_4.jpg', 'html/resources/seq3_6040_5.jpg', 'html/resources/seq3_6040_6.jpg', 'html/resources/seq3_6040_7.jpg', 'html/resources/seq3_6040_8.jpg', 'html/resources/seq3_6040_9.jpg', 'html/resources/seq3_6040_10.jpg', 'html/resources/seq3_6040_11.jpg', 'html/resources/seq3_6040_12.jpg', 'html/resources/seq3_6040_13.jpg', 'html/resources/seq3_6040_14.jpg', 'html/resources/seq3_6040_15.jpg', 'html/resources/seq3_6040_16.jpg', 'html/resources/seq3_6040_17.jpg', 'html/resources/seq3_6040_18.jpg', 'html/resources/seq3_6040_19.jpg', 'html/resources/seq3_6040_20.jpg', 'html/resources/seq3_6040_21.jpg', 'html/resources/seq3_6040_22.jpg', 'html/resources/seq3_6040_23.jpg', 'html/resources/seq3_6040_24.jpg', 'html/resources/seq3_6040_25.jpg', 'html/resources/seq3_6040_26.jpg', 'html/resources/seq3_6040_27.jpg', 'html/resources/seq3_6040_28.jpg', 'html/resources/seq3_6040_29.jpg', 'html/resources/seq3_6040_30.jpg', 'html/resources/seq3_6040_31.jpg', 'html/resources/seq3_6040_32.jpg', 'html/resources/seq3_6040_33.jpg', 'html/resources/seq3_6040_34.jpg', 'html/resources/seq3_6040_35.jpg', 'html/resources/seq3_6040_36.jpg', 'html/resources/seq3_6040_37.jpg', 'html/resources/seq3_6040_38.jpg', 'html/resources/seq3_6040_39.jpg', 'html/resources/seq3_6040_40.jpg', 'html/resources/seq3_8515_1.jpg', 'html/resources/seq3_8515_2.jpg', 'html/resources/seq3_8515_3.jpg', 'html/resources/seq3_8515_4.jpg', 'html/resources/seq3_8515_5.jpg', 'html/resources/seq3_8515_6.jpg', 'html/resources/seq3_8515_7.jpg', 'html/resources/seq3_8515_8.jpg', 'html/resources/seq3_8515_9.jpg', 'html/resources/seq3_8515_10.jpg', 'html/resources/seq3_8515_11.jpg', 'html/resources/seq3_8515_12.jpg', 'html/resources/seq3_8515_13.jpg', 'html/resources/seq3_8515_14.jpg', 'html/resources/seq3_8515_15.jpg', 'html/resources/seq3_8515_16.jpg', 'html/resources/seq3_8515_17.jpg', 'html/resources/seq3_8515_18.jpg', 'html/resources/seq3_8515_19.jpg', 'html/resources/seq3_8515_20.jpg', 'html/resources/seq3_8515_21.jpg', 'html/resources/seq3_8515_22.jpg', 'html/resources/seq3_8515_23.jpg', 'html/resources/seq3_8515_24.jpg', 'html/resources/seq3_8515_25.jpg', 'html/resources/seq3_8515_26.jpg', 'html/resources/seq3_8515_27.jpg', 'html/resources/seq3_8515_28.jpg', 'html/resources/seq3_8515_29.jpg', 'html/resources/seq3_8515_30.jpg', 'html/resources/seq3_8515_31.jpg', 'html/resources/seq3_8515_32.jpg', 'html/resources/seq3_8515_33.jpg', 'html/resources/seq3_8515_34.jpg', 'html/resources/seq3_8515_35.jpg', 'html/resources/seq3_8515_36.jpg', 'html/resources/seq3_8515_37.jpg', 'html/resources/seq3_8515_38.jpg', 'html/resources/seq3_8515_39.jpg', 'html/resources/seq3_8515_40.jpg', 'html/resources/seq4_8515_1.jpg', 'html/resources/seq4_8515_2.jpg', 'html/resources/seq4_8515_3.jpg', 'html/resources/seq4_8515_4.jpg', 'html/resources/seq4_8515_5.jpg', 'html/resources/seq4_8515_6.jpg', 'html/resources/seq4_8515_7.jpg', 'html/resources/seq4_8515_8.jpg', 'html/resources/seq4_8515_9.jpg', 'html/resources/seq4_8515_10.jpg', 'html/resources/seq4_8515_11.jpg', 'html/resources/seq4_8515_12.jpg', 'html/resources/seq4_8515_13.jpg', 'html/resources/seq4_8515_14.jpg', 'html/resources/seq4_8515_15.jpg', 'html/resources/seq4_8515_16.jpg', 'html/resources/seq4_8515_17.jpg', 'html/resources/seq4_8515_18.jpg', 'html/resources/seq4_8515_19.jpg', 'html/resources/seq4_8515_20.jpg', 'html/resources/seq4_8515_21.jpg', 'html/resources/seq4_8515_22.jpg', 'html/resources/seq4_8515_23.jpg', 'html/resources/seq4_8515_24.jpg', 'html/resources/seq4_8515_25.jpg', 'html/resources/seq4_8515_26.jpg', 'html/resources/seq4_8515_27.jpg', 'html/resources/seq4_8515_28.jpg', 'html/resources/seq4_8515_29.jpg', 'html/resources/seq4_8515_30.jpg', 'html/resources/seq4_8515_31.jpg', 'html/resources/seq4_8515_32.jpg', 'html/resources/seq4_8515_33.jpg', 'html/resources/seq4_8515_34.jpg', 'html/resources/seq4_8515_35.jpg', 'html/resources/seq4_8515_36.jpg', 'html/resources/seq4_8515_37.jpg', 'html/resources/seq4_8515_38.jpg', 'html/resources/seq4_8515_39.jpg', 'html/resources/seq4_8515_40.jpg', 'html/resources/trialdef_6040_seq1_small.xlsx', 'html/resources/trialdef_6040_seq3_small.xlsx', 'html/resources/trialdef_8515_seq1_small.xlsx', 'html/resources/trialdef_8515_seq3_small.xlsx', 'html/resources/trialdef_8515_seq4_small.xlsx', 'seq1_1.jpg', 'seq1_6040_1.jpg', 'seq1_6040_2.jpg', 'seq1_6040_3.jpg', 'seq1_6040_4.jpg', 'seq1_6040_5.jpg', 'seq1_6040_6.jpg', 'seq1_6040_7.jpg', 'seq1_6040_8.jpg', 'seq1_6040_9.jpg', 'seq1_6040_10.jpg', 'seq1_6040_11.jpg', 'seq1_6040_12.jpg', 'seq1_6040_13.jpg', 'seq1_6040_14.jpg', 'seq1_6040_15.jpg', 'seq1_6040_16.jpg', 'seq1_6040_17.jpg', 'seq1_6040_18.jpg', 'seq1_6040_19.jpg', 'seq1_6040_20.jpg', 'seq1_6040_21.jpg', 'seq1_6040_22.jpg', 'seq1_6040_23.jpg', 'seq1_6040_24.jpg', 'seq1_6040_25.jpg', 'seq1_6040_26.jpg', 'seq1_6040_27.jpg', 'seq1_6040_28.jpg', 'seq1_6040_29.jpg', 'seq1_6040_30.jpg', 'seq1_6040_31.jpg', 'seq1_6040_32.jpg', 'seq1_6040_33.jpg', 'seq1_6040_34.jpg', 'seq1_6040_35.jpg', 'seq1_6040_36.jpg', 'seq1_6040_37.jpg', 'seq1_6040_38.jpg', 'seq1_6040_39.jpg', 'seq1_6040_40.jpg', 'seq1_8515_1.jpg', 'seq1_8515_2.jpg', 'seq1_8515_3.jpg', 'seq1_8515_4.jpg', 'seq1_8515_5.jpg', 'seq1_8515_6.jpg', 'seq1_8515_7.jpg', 'seq1_8515_8.jpg', 'seq1_8515_9.jpg', 'seq1_8515_10.jpg', 'seq1_8515_11.jpg', 'seq1_8515_12.jpg', 'seq1_8515_13.jpg', 'seq1_8515_14.jpg', 'seq1_8515_15.jpg', 'seq1_8515_16.jpg', 'seq1_8515_17.jpg', 'seq1_8515_18.jpg', 'seq1_8515_19.jpg', 'seq1_8515_20.jpg', 'seq1_8515_21.jpg', 'seq1_8515_22.jpg', 'seq1_8515_23.jpg', 'seq1_8515_24.jpg', 'seq1_8515_25.jpg', 'seq1_8515_26.jpg', 'seq1_8515_27.jpg', 'seq1_8515_28.jpg', 'seq1_8515_29.jpg', 'seq1_8515_30.jpg', 'seq1_8515_31.jpg', 'seq1_8515_32.jpg', 'seq1_8515_33.jpg', 'seq1_8515_34.jpg', 'seq1_8515_35.jpg', 'seq1_8515_36.jpg', 'seq1_8515_37.jpg', 'seq1_8515_38.jpg', 'seq1_8515_39.jpg', 'seq1_8515_40.jpg', 'seq2_6040_2.jpg', 'seq2_6040_3.jpg', 'seq2_6040_4.jpg', 'seq2_6040_5.jpg', 'seq2_6040_6.jpg', 'seq2_6040_7.jpg', 'seq2_6040_8.jpg', 'seq2_6040_9.jpg', 'seq2_6040_10.jpg', 'seq2_6040_11.jpg', 'seq2_6040_12.jpg', 'seq2_6040_13.jpg', 'seq2_6040_14.jpg', 'seq2_6040_15.jpg', 'seq2_6040_16.jpg', 'seq2_6040_17.jpg', 'seq2_6040_18.jpg', 'seq2_6040_19.jpg', 'seq2_6040_20.jpg', 'seq2_8515_1.jpg', 'seq2_8515_2.jpg', 'seq2_8515_3.jpg', 'seq2_8515_4.jpg', 'seq2_8515_5.jpg', 'seq2_8515_6.jpg', 'seq2_8515_7.jpg', 'seq2_8515_8.jpg', 'seq2_8515_9.jpg', 'seq2_8515_10.jpg', 'seq2_8515_11.jpg', 'seq2_8515_12.jpg', 'seq2_8515_13.jpg', 'seq2_8515_14.jpg', 'seq2_8515_15.jpg', 'seq2_8515_16.jpg', 'seq2_8515_17.jpg', 'seq2_8515_18.jpg', 'seq2_8515_19.jpg', 'seq2_8515_20.jpg', 'seq3_6040_1.jpg', 'seq3_6040_2.jpg', 'seq3_6040_3.jpg', 'seq3_6040_4.jpg', 'seq3_6040_5.jpg', 'seq3_6040_6.jpg', 'seq3_6040_7.jpg', 'seq3_6040_8.jpg', 'seq3_6040_9.jpg', 'seq3_6040_10.jpg', 'seq3_6040_11.jpg', 'seq3_6040_12.jpg', 'seq3_6040_13.jpg', 'seq3_6040_14.jpg', 'seq3_6040_15.jpg', 'seq3_6040_16.jpg', 'seq3_6040_17.jpg', 'seq3_6040_18.jpg', 'seq3_6040_19.jpg', 'seq3_6040_20.jpg', 'seq3_6040_21.jpg', 'seq3_6040_22.jpg', 'seq3_6040_23.jpg', 'seq3_6040_24.jpg', 'seq3_6040_25.jpg', 'seq3_6040_26.jpg', 'seq3_6040_27.jpg', 'seq3_6040_28.jpg', 'seq3_6040_29.jpg', 'seq3_6040_30.jpg', 'seq3_6040_31.jpg', 'seq3_6040_32.jpg', 'seq3_6040_33.jpg', 'seq3_6040_34.jpg', 'seq3_6040_35.jpg', 'seq3_6040_36.jpg', 'seq3_6040_37.jpg', 'seq3_6040_38.jpg', 'seq3_6040_39.jpg', 'seq3_6040_40.jpg', 'seq3_8515_1.jpg', 'seq3_8515_2.jpg', 'seq3_8515_3.jpg', 'seq3_8515_4.jpg', 'seq3_8515_5.jpg', 'seq3_8515_6.jpg', 'seq3_8515_7.jpg', 'seq3_8515_8.jpg', 'seq3_8515_9.jpg', 'seq3_8515_10.jpg', 'seq3_8515_11.jpg', 'seq3_8515_12.jpg', 'seq3_8515_13.jpg', 'seq3_8515_14.jpg', 'seq3_8515_15.jpg', 'seq3_8515_16.jpg', 'seq3_8515_17.jpg', 'seq3_8515_18.jpg', 'seq3_8515_19.jpg', 'seq3_8515_20.jpg', 'seq3_8515_21.jpg', 'seq3_8515_22.jpg', 'seq3_8515_23.jpg', 'seq3_8515_24.jpg', 'seq3_8515_25.jpg', 'seq3_8515_26.jpg', 'seq3_8515_27.jpg', 'seq3_8515_28.jpg', 'seq3_8515_29.jpg', 'seq3_8515_30.jpg', 'seq3_8515_31.jpg', 'seq3_8515_32.jpg', 'seq3_8515_33.jpg', 'seq3_8515_34.jpg', 'seq3_8515_35.jpg', 'seq3_8515_36.jpg', 'seq3_8515_37.jpg', 'seq3_8515_38.jpg', 'seq3_8515_39.jpg', 'seq3_8515_40.jpg', 'seq4_6040_2.jpg', 'seq4_6040_3.jpg', 'seq4_6040_4.jpg', 'seq4_6040_5.jpg', 'seq4_6040_6.jpg', 'seq4_6040_7.jpg', 'seq4_6040_8.jpg', 'seq4_6040_9.jpg', 'seq4_6040_10.jpg', 'seq4_6040_11.jpg', 'seq4_6040_12.jpg', 'seq4_6040_13.jpg', 'seq4_6040_14.jpg', 'seq4_6040_15.jpg', 'seq4_6040_16.jpg', 'seq4_6040_17.jpg', 'seq4_6040_18.jpg', 'seq4_6040_19.jpg', 'seq4_6040_20.jpg', 'seq4_8515_1.jpg', 'seq4_8515_2.jpg', 'seq4_8515_3.jpg', 'seq4_8515_4.jpg', 'seq4_8515_5.jpg', 'seq4_8515_6.jpg', 'seq4_8515_7.jpg', 'seq4_8515_8.jpg', 'seq4_8515_9.jpg', 'seq4_8515_10.jpg', 'seq4_8515_11.jpg', 'seq4_8515_12.jpg', 'seq4_8515_13.jpg', 'seq4_8515_14.jpg', 'seq4_8515_15.jpg', 'seq4_8515_16.jpg', 'seq4_8515_17.jpg', 'seq4_8515_18.jpg', 'seq4_8515_19.jpg', 'seq4_8515_20.jpg', 'seq4_8515_21.jpg', 'seq4_8515_22.jpg', 'seq4_8515_23.jpg', 'seq4_8515_24.jpg', 'seq4_8515_25.jpg', 'seq4_8515_26.jpg', 'seq4_8515_27.jpg', 'seq4_8515_28.jpg', 'seq4_8515_29.jpg', 'seq4_8515_30.jpg', 'seq4_8515_31.jpg', 'seq4_8515_32.jpg', 'seq4_8515_33.jpg', 'seq4_8515_34.jpg', 'seq4_8515_35.jpg', 'seq4_8515_36.jpg', 'seq4_8515_37.jpg', 'seq4_8515_38.jpg', 'seq4_8515_39.jpg', 'seq4_8515_40.jpg']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1792, 1120]
  color = $[-1,-1,-1]
  expName = beads_task_DtD_norm_wb
  keyboardBackend = ioHub
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Routines
  Routine end_of_task
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you!
        End of task
  Routine next
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Trial done. Get ready for the next!
        There are five trials in total.

        Press SPACE to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_1
    ImageComponent current_bead
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Press the 'B' key for 85% blue
        Press the 'Y' key for 85% yellow
        Press SPACE to see another bead
    ImageComponent image
      image = jars.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent text
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 85:15
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(keyList=['b', 'y']):
           trials.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'b','y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_4
    ImageComponent current_bead_4
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_4
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Press the 'B' key for 60% blue
        Press the 'Y' key for 60% yellow
        Press SPACE to see another bead
    ImageComponent image_4
      image = jars_6040.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_3
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 60:40
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    CodeComponent end_3
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(keyList=['b', 'y']):
          trials_4.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_5
      allowedKeys = 'b','y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_5
    ImageComponent current_bead_5
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_5
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Press 'M' for 85% majority blue
        Press 'E' for an equal 50:50 split
        Press SPACE to see another bead
    ImageComponent image_5
      image = jars_50508020b.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_4
      letterHeight = 0.07
      pos = (-0.5,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Left jar: 85:15
        Right jar: 50:50
    CodeComponent end_4
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(keyList=['m', 'e', 'y', 'b']):
          trials_5.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_6
      allowedKeys = 'y','b','e','m','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_2
    ImageComponent current_bead_2
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_2
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Press the 'B' key for 85% blue
        Press the 'Y' key for 85% yellow
        Press SPACE to see another bead
    ImageComponent image_2
      image = jars.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 85:15
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    CodeComponent end
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(keyList=['b', 'y']):
          trials_2.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_2
      allowedKeys = 'b','y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_3
    ImageComponent current_bead_3
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_3
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Press the 'B' key for 60% blue
        Press the 'Y' key for 60% yellow
        Press SPACE to see another bead
    ImageComponent image_3
      image = jars_6040.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_2
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 60:40
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    CodeComponent end_2
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(keyList=['b', 'y']):
          trials_3.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'b','y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine instructions
    TextComponent b_instructions_2_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two jars, containing blue and yellow beads. The ratio of blue-to-yellow beads will be displayed onscreen, and stated in text.

        Beads will be drawn at random from only one of the two jars, and then replaced by another bead of the same colour.

        Your task is to figure out which of the two jars the beads are being drawn from.

        You can request to see as many beads as you like by pressing SPACE.

        Make a decision only once you feel you have enough information to do so.

        The colour ratios will change between trials, so it is important that you check all the information on the screen on each of the five trial.

        When you are ready, press SPACE to start.

        Good luck!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['blue.jpg', 'jars_6040.jpg', 'jars_50508020b.jpg', 'jars.jpg', 'seq1_1.jpg', 'seq1_6040_1.jpg', 'seq1_6040_2.jpg', 'seq1_6040_3.jpg', 'seq1_6040_4.jpg', 'seq1_6040_5.jpg', 'seq1_6040_6.jpg', 'seq1_6040_7.jpg', 'seq1_6040_8.jpg', 'seq1_6040_9.jpg', 'seq1_6040_10.jpg', 'seq1_6040_11.jpg', 'seq1_6040_12.jpg', 'seq1_6040_13.jpg', 'seq1_6040_14.jpg', 'seq1_6040_15.jpg', 'seq1_6040_16.jpg', 'seq1_6040_17.jpg', 'seq1_6040_18.jpg', 'seq1_6040_19.jpg', 'seq1_6040_20.jpg', 'seq1_6040_21.jpg', 'seq1_6040_22.jpg', 'seq1_6040_23.jpg', 'seq1_6040_24.jpg', 'seq1_6040_25.jpg', 'seq1_6040_26.jpg', 'seq1_6040_27.jpg', 'seq1_6040_28.jpg', 'seq1_6040_29.jpg', 'seq1_6040_30.jpg', 'seq1_6040_31.jpg', 'seq1_6040_32.jpg', 'seq1_6040_33.jpg', 'seq1_6040_34.jpg', 'seq1_6040_35.jpg', 'seq1_6040_36.jpg', 'seq1_6040_37.jpg', 'seq1_6040_38.jpg', 'seq1_6040_39.jpg', 'seq1_6040_40.jpg', 'seq1_8515_1.jpg', 'seq1_8515_2.jpg', 'seq1_8515_3.jpg', 'seq1_8515_4.jpg', 'seq1_8515_5.jpg', 'seq1_8515_6.jpg', 'seq1_8515_7.jpg', 'seq1_8515_8.jpg', 'seq1_8515_9.jpg', 'seq1_8515_10.jpg', 'seq1_8515_11.jpg', 'seq1_8515_12.jpg', 'seq1_8515_13.jpg', 'seq1_8515_14.jpg', 'seq1_8515_15.jpg', 'seq1_8515_16.jpg', 'seq1_8515_17.jpg', 'seq1_8515_18.jpg', 'seq1_8515_19.jpg', 'seq1_8515_20.jpg', 'seq1_8515_21.jpg', 'seq1_8515_22.jpg', 'seq1_8515_23.jpg', 'seq1_8515_24.jpg', 'seq1_8515_25.jpg', 'seq1_8515_26.jpg', 'seq1_8515_27.jpg', 'seq1_8515_28.jpg', 'seq1_8515_29.jpg', 'seq1_8515_30.jpg', 'seq1_8515_31.jpg', 'seq1_8515_32.jpg', 'seq1_8515_33.jpg', 'seq1_8515_34.jpg', 'seq1_8515_35.jpg', 'seq1_8515_36.jpg', 'seq1_8515_37.jpg', 'seq1_8515_38.jpg', 'seq1_8515_39.jpg', 'seq1_8515_40.jpg', 'seq2_6040_2.jpg', 'seq2_6040_3.jpg', 'seq2_6040_4.jpg', 'seq2_6040_5.jpg', 'seq2_6040_6.jpg', 'seq2_6040_7.jpg', 'seq2_6040_8.jpg', 'seq2_6040_9.jpg', 'seq2_6040_10.jpg', 'seq2_6040_11.jpg', 'seq2_6040_12.jpg', 'seq2_6040_13.jpg', 'seq2_6040_14.jpg', 'seq2_6040_15.jpg', 'seq2_6040_16.jpg', 'seq2_6040_17.jpg', 'seq2_6040_18.jpg', 'seq2_6040_19.jpg', 'seq2_6040_20.jpg', 'seq2_8515_1.jpg', 'seq2_8515_2.jpg', 'seq2_8515_3.jpg', 'seq2_8515_4.jpg', 'seq2_8515_5.jpg', 'seq2_8515_6.jpg', 'seq2_8515_7.jpg', 'seq2_8515_8.jpg', 'seq2_8515_9.jpg', 'seq2_8515_10.jpg', 'seq2_8515_11.jpg', 'seq2_8515_12.jpg', 'seq2_8515_13.jpg', 'seq2_8515_14.jpg', 'seq2_8515_15.jpg', 'seq2_8515_16.jpg', 'seq2_8515_17.jpg', 'seq2_8515_18.jpg', 'seq2_8515_19.jpg', 'seq2_8515_20.jpg', 'seq3_6040_1.jpg', 'seq3_6040_2.jpg', 'seq3_6040_3.jpg', 'seq3_6040_4.jpg', 'seq3_6040_5.jpg', 'seq3_6040_6.jpg', 'seq3_6040_7.jpg', 'seq3_6040_8.jpg', 'seq3_6040_9.jpg', 'seq3_6040_10.jpg', 'seq3_6040_11.jpg', 'seq3_6040_12.jpg', 'seq3_6040_13.jpg', 'seq3_6040_14.jpg', 'seq3_6040_15.jpg', 'seq3_6040_16.jpg', 'seq3_6040_17.jpg', 'seq3_6040_18.jpg', 'seq3_6040_19.jpg', 'seq3_6040_20.jpg', 'seq3_6040_21.jpg', 'seq3_6040_22.jpg', 'seq3_6040_23.jpg', 'seq3_6040_24.jpg', 'seq3_6040_25.jpg', 'seq3_6040_26.jpg', 'seq3_6040_27.jpg', 'seq3_6040_28.jpg', 'seq3_6040_29.jpg', 'seq3_6040_30.jpg', 'seq3_6040_31.jpg', 'seq3_6040_32.jpg', 'seq3_6040_33.jpg', 'seq3_6040_34.jpg', 'seq3_6040_35.jpg', 'seq3_6040_36.jpg', 'seq3_6040_37.jpg', 'seq3_6040_38.jpg', 'seq3_6040_39.jpg', 'seq3_6040_40.jpg', 'seq3_8515_1.jpg', 'seq3_8515_2.jpg', 'seq3_8515_3.jpg', 'seq3_8515_4.jpg', 'seq3_8515_5.jpg', 'seq3_8515_6.jpg', 'seq3_8515_7.jpg', 'seq3_8515_8.jpg', 'seq3_8515_9.jpg', 'seq3_8515_10.jpg', 'seq3_8515_11.jpg', 'seq3_8515_12.jpg', 'seq3_8515_13.jpg', 'seq3_8515_14.jpg', 'seq3_8515_15.jpg', 'seq3_8515_16.jpg', 'seq3_8515_17.jpg', 'seq3_8515_18.jpg', 'seq3_8515_19.jpg', 'seq3_8515_20.jpg', 'seq3_8515_21.jpg', 'seq3_8515_22.jpg', 'seq3_8515_23.jpg', 'seq3_8515_24.jpg', 'seq3_8515_25.jpg', 'seq3_8515_26.jpg', 'seq3_8515_27.jpg', 'seq3_8515_28.jpg', 'seq3_8515_29.jpg', 'seq3_8515_30.jpg', 'seq3_8515_31.jpg', 'seq3_8515_32.jpg', 'seq3_8515_33.jpg', 'seq3_8515_34.jpg', 'seq3_8515_35.jpg', 'seq3_8515_36.jpg', 'seq3_8515_37.jpg', 'seq3_8515_38.jpg', 'seq3_8515_39.jpg', 'seq3_8515_40.jpg', 'seq4_6040_2.jpg', 'seq4_6040_3.jpg', 'seq4_6040_4.jpg', 'seq4_6040_5.jpg', 'seq4_6040_6.jpg', 'seq4_6040_7.jpg', 'seq4_6040_8.jpg', 'seq4_6040_9.jpg', 'seq4_6040_10.jpg', 'seq4_6040_11.jpg', 'seq4_6040_12.jpg', 'seq4_6040_13.jpg', 'seq4_6040_14.jpg', 'seq4_6040_15.jpg', 'seq4_6040_16.jpg', 'seq4_6040_17.jpg', 'seq4_6040_18.jpg', 'seq4_6040_19.jpg', 'seq4_6040_20.jpg', 'seq4_8515_1.jpg', 'seq4_8515_2.jpg', 'seq4_8515_3.jpg', 'seq4_8515_4.jpg', 'seq4_8515_5.jpg', 'seq4_8515_6.jpg', 'seq4_8515_7.jpg', 'seq4_8515_8.jpg', 'seq4_8515_9.jpg', 'seq4_8515_10.jpg', 'seq4_8515_11.jpg', 'seq4_8515_12.jpg', 'seq4_8515_13.jpg', 'seq4_8515_14.jpg', 'seq4_8515_15.jpg', 'seq4_8515_16.jpg', 'seq4_8515_17.jpg', 'seq4_8515_18.jpg', 'seq4_8515_19.jpg', 'seq4_8515_20.jpg', 'seq4_8515_21.jpg', 'seq4_8515_22.jpg', 'seq4_8515_23.jpg', 'seq4_8515_24.jpg', 'seq4_8515_25.jpg', 'seq4_8515_26.jpg', 'seq4_8515_27.jpg', 'seq4_8515_28.jpg', 'seq4_8515_29.jpg', 'seq4_8515_30.jpg', 'seq4_8515_31.jpg', 'seq4_8515_32.jpg', 'seq4_8515_33.jpg', 'seq4_8515_34.jpg', 'seq4_8515_35.jpg', 'seq4_8515_36.jpg', 'seq4_8515_37.jpg', 'seq4_8515_38.jpg', 'seq4_8515_39.jpg', 'seq4_8515_40.jpg', 'trialdef_6040_audseq1.xlsx', 'trialdef_6040_audseq2.xlsx', 'trialdef_6040_seq1_small.xlsx', 'trialdef_6040_seq2_small.xlsx', 'trialdef_6040_seq3_small.xlsx', 'trialdef_6040_seq4_small.xlsx', 'trialdef_8515_audseq1.xlsx', 'trialdef_8515_audseq2.xlsx', 'trialdef_8515_seq1_small.xlsx', 'trialdef_8515_seq2_small.xlsx', 'trialdef_8515_seq3_small.xlsx', 'trialdef_8515_seq4_small.xlsx']
      startVal [time (s)] = 0
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq1_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_20.jpg')])]
    Routine trial_1
  LoopTerminator trials
  Routine next
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq3_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_20.jpg')])]
    Routine trial_2
  LoopTerminator trials_2
  Routine next
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq1_6040_1.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_2.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_3.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_4.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_5.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_6.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_7.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_8.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_9.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_10.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_11.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_12.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_13.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_14.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_15.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_16.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_17.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_18.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_19.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_20.jpg')])]
    Routine trial_3
  LoopTerminator trials_3
  Routine next
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq3_6040_1.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_2.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_3.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_4.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_5.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_6.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_7.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_8.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_9.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_10.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_11.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_12.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_13.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_14.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_15.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_16.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_17.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_18.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_19.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_20.jpg')])]
    Routine trial_4
  LoopTerminator trials_4
  Routine next
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq4_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq4_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_20.jpg')])]
    Routine trial_5
  LoopTerminator trials_5
  Routine end_of_task
